// present version
load_file("nrngui.hoc")

Default_Eleak = -65
membranecap = 0.64      	/* specific membrane capacitance in uF cm^-2 */
membraneresist = 120236 	/* specific membrane resistance in ohm cm^2 */
axialresist = 120	     	/* axial resistivity in ohm cm */

	xopen("Purkinje19b972-1.nrn")	// Load the morphology file.
	forsec "axon" delete_section()	// Delete original axon and add a fake AIS

objref g2, b2,c2, distrx, distry, cdistry, p

	forall {
		insert pas e_pas=Default_Eleak	/* Insert Leak everywhere */
	    insert hpkj	// Ih inserted everywhere
		insert ds
		insert pk
	}

    AIS {  g_pas=1/membraneresist Ra=axialresist cm=membranecap}
	forsec spinydend {g_pas=5.3/membraneresist Ra=axialresist cm=5.3*membranecap}
    forsec maindend {g_pas=1.2/membraneresist Ra=axialresist cm=1.2*membranecap}
	forsec "soma" { g_pas=1/membraneresist Ra=axialresist cm=membranecap}

forsec maindend {insert cdp4N}
forsec alldend {
    insert Kv3
    gbar_Kv3 = 0.1512
    vshift_Kv3 = 4
    insert newCaP
    pcabar_newCaP = 0.00019 
    vshift_newCaP =-5
    insert CaT3_1
    pcabar_CaT3_1 = 2.7e-05

    insert mslo
    gbar_mslo = 0.21504
    insert SK2
    gkbar_SK2 = 2.4000e-04*1.5
    scal_SK2 = 1.0
    ghbar_hpkj = 0.00036
	insert Kv1
	gbar_Kv1 = 0.002
	insert Kv4
	 gbar_Kv4 = 0.0252 
    insert Kv4s
    gbar_Kv4s = 0.015

}

forsec spinydend {
	insert cdp4Nsp
    gkbar_SK2 = 0.00036 
    
    scal_SK2 = 1.0
	gbar_Kv4 = 0.0264 
    gbar_Kv4s = 0.015
    ghbar_hpkj = 0.000324
    vshift_Kv4 = 0
    gbar_Kv1 = 0.001
    gbar_Kv3 =0.1512
    vshift_Kv3 = 0
    pcabar_CaT3_1 = 0.000108 
    pcabar_newCaP = 0.00076 
    vshift_newCaP = -5
    scale_cdp4Nsp = 3.5
    gbar_mslo = 0.0896
    insert abBK
    gabkbar_abBK = 0.15
}


access somaA
somaA distance(0,0.5)

forsec "soma" {	
	insert naRsg
	gbar_naRsg = 0.03168 
	vshifta_naRsg = 0
    vshiftk_naRsg = 0
    vshifti_naRsg = -5
    
	insert nap
	gbar_nap = 0.00014 
	insert pk
	ena = 63
    ghbar_hpkj = 0.000108

    insert cdp20N_FD2

    insert Kv3
    gbar_Kv3 = 1.8
    vshift_Kv3 = 4
    insert newCaP
    pcabar_newCaP =0.00019 
    kt_newCaP = 1
    vshift_newCaP = -5
    insert mslo
    gbar_mslo = 0.8736
    insert abBK
    gabkbar_abBK = 0.3
    insert SK2
    gkbar_SK2 = 0.0075 
}

AIS {
    insert naRsg
	gbar_naRsg = 0.56
	vshifta_naRsg = 15
	vshiftk_naRsg = 5
    vshifti_naRsg = -5
	insert nap
	gbar_nap = 0.0023
	insert CaT3_1
	pcabar_CaT3_1 = 0.000128 
	ena = 63
    ghbar_hpkj = 0.000108 
    insert cdpAIS

    insert Kv3
    gbar_Kv3 =115.2 
    vshift_Kv3 = 4
    insert newCaP
    pcabar_newCaP = 0.00228 
    kt_newCaP = 1
    vshift_newCaP = -5
    insert mslo
    gbar_mslo = 6
    insert abBK
    gabkbar_abBK = 1.05
    insert SK2
    gkbar_SK2 = 0.027777778 
}

access somaA

xopen("dendv_arnd21.ses")

celsius = 34
dt = 0.02
steps_per_ms = 1/dt
dtsim = 0.02

xopen ("electrode.hoc")
xopen("distri.hoc")

stim1.amp =1.06*0
stim1.del = 200-200
stim1.dur =50000000000000
v_init = -65-3

// simple spike energy consumtion

tstop = 500
cfstart = 600

finitialize(v_init)

for i=0,synlist.count()-1 {
    synlist.object(i).onset = cfstart
    synlist.object(i).gmax = 1.2251821e-3
    synlist.object(i).tau0 = 0.3
    synlist.object(i).tau1 = 3
}

startsw()
continuerun(tstop)		// This is "run()" without the "init()"
stopsw()

